<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

<reader>
  <slot>1008</slot>
  <dll>gadgetron_mricore</dll>
  <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
</reader>

<writer>
  <slot>1022</slot>
  <dll>gadgetron_mricore</dll>
  <classname>MRIImageWriter</classname>
</writer>

<gadget>
  <name>RemoveROOversampling</name>
  <dll>gadgetron_mricore</dll>
  <classname>RemoveROOversamplingGadget</classname>
</gadget>

    <gadget>
        <name>EmptyRemoveROOversamplingGadget</name>
        <dll>gadgetron_examplelib</dll>
        <classname>EmptyRemoveROOversamplingGadget</classname>
    </gadget>


<gadget>
  <name>AccTrig</name>
  <dll>gadgetron_mricore</dll>
  <classname>AcquisitionAccumulateTriggerGadget</classname>
  <property>
    <name>trigger_dimension</name>
    <value>repetition</value>
  </property>
  <property>
    <name>sorting_dimension</name>
    <value>slice</value>
  </property>
</gadget>

<gadget>
  <name>Buff</name>
  <dll>gadgetron_mricore</dll>
  <classname>BucketToBufferGadget</classname>
  <property>
    <name>N_dimension</name>
    <value></value>
  </property>
  <property>
    <name>S_dimension</name>
    <value></value>
  </property>
  <property>
    <name>split_slices</name>
    <value>f</value>
  </property>
</gadget>

    <!-- Prep ref -->
    <!--  <gadget>
        <name>GenericEmptyTestGadget</name>
        <dll>gadgetron_examplelib</dll>
        <classname>GenericEmptyTestGadget</classname>
    </gadget> -->


<!--    <gadget>
        <name>GenericChangeSizeTo8Gadget</name>
        <dll>gadgetron_examplelib</dll>
        <classname>GenericChangeSizeTo8Gadget</classname>
    </gadget>
-->




    <gadget>
        <name>GenericCheckSizeGadget</name>
        <dll>gadgetron_examplelib</dll>
        <classname>GenericCheckSizeGadget</classname>
    </gadget>

    <gadget>
        <name>GenericChangeSizeTo7Gadget</name>
        <dll>gadgetron_examplelib</dll>
        <classname>GenericChangeSizeTo7Gadget</classname>
    </gadget>


    <gadget>
        <name>GenericCheckSizeGadget</name>
        <dll>gadgetron_examplelib</dll>
        <classname>GenericCheckSizeGadget</classname>
    </gadget>





<!--
<gadget>
  <name>GenericCheckSizeGadget</name>
  <dll>gadgetron_examplelib</dll>
  <classname>GenericCheckSizeGadget</classname>
</gadget>
-->

<gadget>
  <name>SimpleRecon</name>
  <dll>gadgetron_mricore</dll>
  <classname>SimpleReconGadget</classname>
</gadget>

<gadget>
  <name>ImageArraySplit</name>
  <dll>gadgetron_mricore</dll>
  <classname>ImageArraySplitGadget</classname>
</gadget>

<!-- This is where we insert our new Gadget -->
<!--<gadget>
  <name>Threshold</name>
  <dll>gadgetron_examplelib</dll>
  <classname>ThresholdGadget</classname>
  <property>
    <name>level</name>
    <value>0.50</value>
  </property>
</gadget> -->

<gadget>
  <name>Extract</name>
  <dll>gadgetron_mricore</dll>
  <classname>ExtractGadget</classname>
</gadget>

<gadget>
  <name>ImageFinish</name>
  <dll>gadgetron_mricore</dll>
  <classname>ImageFinishGadget</classname>
</gadget>

</gadgetronStreamConfiguration>
