<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream> 

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>


        <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>RemoveROOversampling</name>
        <dll>gadgetron_mricore</dll>
        <classname>RemoveROOversamplingGadget</classname>
    </gadget>



    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property>
            <name>trigger_dimension</name>
            <value>repetition</value>
        </property>
        <property>
          <name>sorting_dimension</name>
          <value>slice</value>
        </property>
    </gadget>

    <gadget>
        <name>Buff</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property>
            <name>N_dimension</name>
            <value></value>
        </property>
        <property>
          <name>S_dimension</name>
          <value></value>
        </property>
        <property>
          <name>split_slices</name>
          <value>true</value>
        </property>
    </gadget>


   
     <!-- Prep ref -->
    <gadget>
        <name>PrepRef</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianReferencePrepGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>

        <!-- averaging across repetition -->
        <property><name>average_all_ref_N</name><value>true</value></property>
        <!-- every set has its own kernels -->
        <property><name>average_all_ref_S</name><value>true</value></property>
        <!-- whether always to prepare ref if no acceleration is used -->
        <property><name>prepare_ref_always</name><value>true</value></property>
    </gadget>

    <!-- Coil compression -->
    <gadget>
        <name>CoilCompression</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconEigenChannelGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>

        <property><name>average_all_ref_N</name><value>true</value></property>
        <property><name>average_all_ref_S</name><value>true</value></property>

        <!-- Up stream coil compression -->
        <property><name>upstream_coil_compression</name><value>true</value></property>
        <property><name>upstream_coil_compression_thres</name><value>0.002</value></property>
        <property><name>upstream_coil_compression_num_modesKept</name><value>0</value></property>
    </gadget>

    <!-- Recon -->
    <gadget>
        <name>Recon</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianGrappaGadget</classname>

        <!-- image series -->
        <property><name>image_series</name><value>0</value></property>

        <!-- Coil map estimation, Inati or Inati_Iter -->
        <property><name>coil_map_algorithm</name><value>Inati</value></property>

        <!-- Down stream coil compression -->
        <property><name>downstream_coil_compression</name><value>true</value></property>
        <property><name>downstream_coil_compression_thres</name><value>0.01</value></property>
        <property><name>downstream_coil_compression_num_modesKept</name><value>0</value></property>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>

        <!-- whether to send out gfactor -->
        <property><name>send_out_gfactor</name><value>false</value></property>
    </gadget>


    <!-- Partial fourier handling -->
    <gadget>
        <name>PartialFourierHandling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconPartialFourierHandlingFilterGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <!-- if incoming images have this meta field, it will not be processed -->
        <property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>

        <!-- Parfial fourier handling filter parameters -->
        <property><name>partial_fourier_filter_RO_width</name><value>0.15</value></property>
        <property><name>partial_fourier_filter_E1_width</name><value>0.15</value></property>
        <property><name>partial_fourier_filter_E2_width</name><value>0.15</value></property>
        <property><name>partial_fourier_filter_densityComp</name><value>false</value></property>
    </gadget>

    <!-- Kspace filtering -->
    <gadget>
        <name>KSpaceFilter</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconKSpaceFilteringGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <!-- if incoming images have this meta field, it will not be processed -->
        <property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>

        <!-- parameters for kspace filtering -->
        <property><name>filterRO</name><value>Gaussian</value></property>
        <property><name>filterRO_sigma</name><value>1.0</value></property>
        <property><name>filterRO_width</name><value>0.15</value></property>

        <property><name>filterE1</name><value>Gaussian</value></property>
        <property><name>filterE1_sigma</name><value>1.0</value></property>
        <property><name>filterE1_width</name><value>0.15</value></property>

        <property><name>filterE2</name><value>Gaussian</value></property>
        <property><name>filterE2_sigma</name><value>1.0</value></property>
        <property><name>filterE2_width</name><value>0.15</value></property>
    </gadget>

    <!-- FOV Adjustment -->
    <gadget>
        <name>FOVAdjustment</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconFieldOfViewAdjustmentGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>
    </gadget>

    <!-- Image Array Scaling -->
    <gadget>
        <name>Scaling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconImageArrayScalingGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>min_intensity_value</name><value>64</value></property>
        <property><name>max_intensity_value</name><value>4095</value></property>
        <property><name>scalingFactor</name><value>1.0</value></property>
        <property><name>use_constant_scalingFactor</name><value>true</value></property>
        <property><name>auto_scaling_only_once</name><value>true</value></property>
        <property><name>scalingFactor_dedicated</name><value>100.0</value></property>
    </gadget>

    <!-- ImageArray to images -->
 <gadget>
        <name>ImageArrayEmpty</name>
        <dll>gadgetron_smscore</dll>
        <classname>ImageArrayEmptyGadget</classname>
    </gadget>

  <!--  <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>-->

   <gadget>
        <name>ComplexToFloatAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>ComplexToFloatGadget</classname>
    </gadget>

<!--
    <external>
            <execute name="nifti_python" target="SendContoursGadget" type="python"/>            
            <configuration/>
    </external> -->

    <gadget>
        <name>FloatToShortAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>FloatToUShortGadget</classname>

        <property><name>max_intensity</name><value>32767</value></property>
        <property><name>min_intensity</name><value>0</value></property>
        <property><name>intensity_offset</name><value>0</value></property>
    </gadget>

    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>


  

  </stream>

</configuration>
