<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <!--
        Gadgetron generic recon chain for 2D cartesian EPI sampling

        EPI imaging
        Triggered by repetition
        Recon N is repetition and S is set

        Author: Hui Xue
        Magnetic Resonance Technology Program, National Heart, Lung and Blood Institute, National Institutes of Health
        10 Center Drive, Bethesda, MD 20814, USA
        Email: hui.xue@nih.gov
    -->

    <!-- reader -->
    <reader><slot>1008</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdAcquisitionMessageReader</classname></reader>

    <!-- writer -->
    <writer><slot>1022</slot><dll>gadgetron_mricore</dll><classname>MRIImageWriter</classname></writer>

    <!-- Noise prewhitening -->
 <gadget><name>NoiseAdjust</name><dll>gadgetron_mricore</dll><classname>NoiseAdjustGadget</classname></gadget>


    <gadget>
        <name>WriteSliceCalibrationFlags</name>
        <dll>gadgetron_multiband</dll>
        <classname>WriteSliceCalibrationFlagsGadget</classname>
    </gadget>

    <gadget>
        <name>KillMultibandDataGadget</name>
        <dll>gadgetron_multiband</dll>
        <classname>KillMultibandDataGadget</classname>
    </gadget>


</gadgetronStreamConfiguration>
