<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <!--
        Gadgetron generic recon chain for 2D cartesian EPI sampling

        EPI imaging
        Triggered by repetition
        Recon N is repetition and S is set

        Author: Hui Xue
        National Heart, Lung and Blood Institute, National Institutes of Health
        10 Center Drive, Bethesda, MD 20814, USA
        Email: hui.xue@nih.gov
    -->

    <!-- reader -->
    <reader><slot>1008</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdAcquisitionMessageReader</classname></reader>
    <reader><slot>1026</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdWaveformMessageReader</classname></reader>

    <!-- writer -->
    <writer><slot>1022</slot><dll>gadgetron_mricore</dll><classname>MRIImageWriter</classname></writer>

    <!-- Noise prewhitening -->
    <gadget><name>NoiseAdjust</name><dll>gadgetron_mricore</dll><classname>NoiseAdjustGadget</classname></gadget>

    <gadget>
    <name>WriteSingleBandFlags</name>
     <dll>gadgetron_mricore</dll>
    <classname>WriteSingleBandFlagsGadget</classname>
    </gadget>

    <!-- EPI correction -->
    <gadget>
        <name>ReconX</name>
        <dll>gadgetron_epi</dll>
        <classname>EPIReconXGadget</classname>
    </gadget>

    <gadget>
        <name>EPICorrSMS</name>
        <dll>gadgetron_epi</dll>
        <classname>EPICorrSMSGadget</classname>
    </gadget>

<!--
    <gadget>
        <name>FFTX</name>
        <dll>gadgetron_epi</dll>
        <classname>FFTXGadget</classname>
    </gadget>
    -->

    <gadget>
        <name>OneEncodingSpace</name>
        <dll>gadgetron_epi</dll>
        <classname>OneEncodingGadget</classname>
    </gadget>

    <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value>repetition</value></property>
        <property><name>sorting_dimension</name><value></value></property>
    </gadget>

    <gadget>
        <name>BucketToBuffer</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property><name>N_dimension</name><value>user_0</value></property>
        <property><name>S_dimension</name><value>contrast</value></property>
        <property><name>split_slices</name><value>false</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
    </gadget>



<!--
    <gadget>
        <name>CheckSize</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconSizeGadget</classname>         
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
    </gadget>
    -->

    <gadget>
        <name>GenericReconSplitSMS</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconSplitSMSGadget</classname>
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
        <property><name>use_omp</name><value>true</value></property>
    </gadget>


    <gadget>
        <name>GenericReconCheckSizeGadget</name>
        <dll>gadgetron_smscore</dll>
        <classname>GenericReconCheckSizeGadget</classname>
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
    </gadget>

<!--
    <gadget>
    <name>SMSPrepGadget</name>
    <dll>gadgetron_smscore</dll>
    <classname>GenericReconSMSPrepGadget</classname>   
    <property><name>debug_folder</name><value>Prep/</value></property>
    <property><name>perform_timing</name><value>true</value></property>
    <property><name>verbose</name><value>true</value></property>
    <property><name>use_omp</name><value>true</value></property>
     <property><name>use_gpu</name><value>true</value></property>
    </gadget> -->


<!-- Coil compression -->

  <!--<gadget>
    <name>CoilCompression</name>
    <dll>gadgetron_smscore</dll>
    <classname>GenericReconEigenChannelSMSGadget</classname>

    <property><name>debug_folder</name><value></value></property>
    <property><name>perform_timing</name><value>true</value></property>
    <property><name>verbose</name><value>false</value></property>

    <property><name>average_all_ref_N</name><value>true</value></property>
    <property><name>average_all_ref_S</name><value>false</value></property>


    <property><name>upstream_coil_compression</name><value>true</value></property>
    <property><name>upstream_coil_compression_thres</name><value>0.002</value></property>
    <property><name>upstream_coil_compression_num_modesKept</name><value>0</value></property>
</gadget>-->

<!--

   <gadget>

    <name>SliceGrappavgpuGadget</name>
    <dll>gadgetron_smscore</dll>
    <classname>GenericReconCartesianSliceGrappavgpuGadget</classname>
    <property><name>debug_folder</name><value></value></property>
    <property><name>perform_timing</name><value>true</value></property>
    <property><name>verbose</name><value>true</value></property>

    <property><name>use_slice_grappa_gpu</name><value>true</value></property>
    <property><name>use_gpu</name><value>true</value></property>
    <property><name>use_omp</name><value>true</value></property>
    <property><name>calib_fast</name><value>true</value></property>
    <property><name>grappa_kSize_RO</name><value>5</value></property>
    <property><name>grappa_kSize_E1</name><value>5</value></property>

    <property><name>downstream_coil_compression</name><value>true</value></property>
    <property><name>downstream_coil_compression_thres</name><value>0.002</value></property>
    <property><name>downstream_coil_compression_num_modesKept</name><value>8</value></property>

    </gadget>


  <gadget>
    <name>SMSPostGadget</name>
    <dll>gadgetron_smscore</dll>
    <classname>GenericReconSMSPostGadget</classname>
    <property><name>debug_folder</name><value></value></property>
    <property><name>perform_timing</name><value>true</value></property>
    <property><name>verbose</name><value>true</value></property>
    <property><name>use_omp</name><value>true</value></property>
    <property><name>use_gpu</name><value>true</value></property>
    </gadget>

-->


</gadgetronStreamConfiguration>

